PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimPresTime': '5', 'taskOrder': '1', 'listNum': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sequences/v13/v13_listA.csv', 'sequences/v13/v13_listB.csv', 'sequences/v13/v13_listC.csv', 'sequences/v13/v13_listD.csv', 'sequences/v13/v13_listE.csv', 'sequences/a16/a16_listA.csv', 'sequences/a16/a16_listB.csv', 'sequences/a16/a16_listC.csv', 'sequences/a16/a16_listD.csv', 'sequences/a16/a16_listE.csv', 'sequences/a05/a05_listA.csv', 'sequences/a05/a05_listB.csv', 'sequences/a05/a05_listC.csv', 'sequences/a05/a05_listD.csv', 'sequences/a05/a05_listE.csv', 'stimuli/f00022.png', 'stimuli/f00047.png', 'stimuli/f00071.png', 'stimuli/f00095.png', 'stimuli/f00110.png', 'stimuli/f00121.png', 'stimuli/f00133.png', 'stimuli/f00142.png', 'stimuli/f00143.png', 'stimuli/f00156.png', 'stimuli/f00168.png', 'stimuli/f00169.png', 'stimuli/f00171.png', 'stimuli/f00174.png', 'stimuli/f00175.png', 'stimuli/f00176.png', 'stimuli/f00178.png', 'stimuli/f00188.png', 'stimuli/f00189.png', 'stimuli/f00192.png', 'stimuli/f00201.png', 'stimuli/f00207.png', 'stimuli/f00210.png', 'stimuli/f00219.png', 'stimuli/f00238.png', 'stimuli/f00239.png', 'stimuli/f00269.png', 'stimuli/f00275.png', 'stimuli/f00278.png', 'stimuli/f00284.png', 'stimuli/f00287.png', 'stimuli/f00325.png', 'stimuli/f00326.png', 'stimuli/f00327.png', 'stimuli/f00386.png', 'stimuli/f00387.png', 'stimuli/f00389.png', 'stimuli/f00390.png', 'stimuli/f00396.png', 'stimuli/f00398.png', 'stimuli/f00417.png', 'stimuli/f00425.png', 'stimuli/f00426.png', 'stimuli/f00429.png', 'stimuli/f00434.png', 'stimuli/f00439.png', 'stimuli/f00440.png', 'stimuli/f00444.png', 'stimuli/f00445.png', 'stimuli/f00451.png', 'stimuli/f00453.png', 'stimuli/f00455.png', 'stimuli/f00457.png', 'stimuli/f00480.png', 'stimuli/f00483.png', 'stimuli/f00484.png', 'stimuli/f00485.png', 'stimuli/f00508.png', 'stimuli/f00532.png', 'stimuli/f00544.png', 'stimuli/f00555.png', 'stimuli/f00577.png', 'stimuli/f00603.png', 'stimuli/f00608.png', 'stimuli/f00611.png', 'stimuli/f00612.png', 'stimuli/f00613.png', 'stimuli/f00629.png', 'stimuli/f00635.png', 'stimuli/f00639.png', 'stimuli/f00660.png', 'stimuli/f00721.png', 'stimuli/f00725.png', 'stimuli/f00746.png', 'stimuli/f00758.png', 'stimuli/f00772.png', 'stimuli/f00774.png', 'stimuli/f00809.png', 'stimuli/f00840.png', 'stimuli/f00841.png', 'stimuli/f00843.png', 'stimuli/f00847.png', 'stimuli/f00850.png', 'stimuli/f00851.png', 'stimuli/f00861.png', 'stimuli/f00862.png', 'stimuli/f00863.png', 'stimuli/f00864.png', 'stimuli/f00865.png', 'stimuli/f00867.png', 'stimuli/f00870.png', 'stimuli/f00874.png', 'stimuli/f00891.png', 'stimuli/f00906.png', 'stimuli/f00907.png', 'stimuli/f00922.png', 'stimuli/f00929.png', 'stimuli/f00929_backup_1.png', 'stimuli/f00929_backup_2.png', 'stimuli/f00929_backup_3.png', 'stimuli/f00952.png', 'stimuli/f00966.png', 'stimuli/f00968.png', 'stimuli/f00969.png', 'stimuli/f00973.png', 'stimuli/f00974.png', 'stimuli/f00976.png', 'stimuli/f00987.png', 'stimuli/f01008.png', 'stimuli/f01050.png', 'stimuli/f01051.png', 'stimuli/f01054.png', 'stimuli/f01056.png', 'stimuli/f01062.png', 'stimuli/f01076.png', 'stimuli/f01090.png', 'stimuli/f01112.png', 'stimuli/f01124.png', 'stimuli/f01124_backup.png', 'stimuli/f01137.png', 'stimuli/f01140.png', 'stimuli/f01147.png', 'stimuli/f01149.png', 'stimuli/f01163.png', 'stimuli/f01173.png', 'stimuli/f01183.png', 'stimuli/f01193.png', 'stimuli/f01198.png', 'stimuli/f01203.png', 'stimuli/f01250.png', 'stimuli/f01253.png', 'stimuli/f01278.png', 'stimuli/f01306.png', 'stimuli/f01315.png', 'stimuli/f01320.png', 'stimuli/f01327.png', 'stimuli/f01344.png', 'stimuli/f01389.png', 'stimuli/f01415.png', 'stimuli/f01440.png', 'stimuli/f01441.png', 'stimuli/f01454.png', 'stimuli/f01490.png', 'stimuli/f01505.png', 'stimuli/f01515.png', 'stimuli/f01517.png', 'stimuli/f01518.png', 'stimuli/f01531.png', 'stimuli/f01533.png', 'stimuli/f01536.png', 'stimuli/f01537.png', 'stimuli/f01538.png', 'stimuli/f01539.png', 'stimuli/f01585.png', 'stimuli/f01588.png', 'stimuli/f01594.png', 'stimuli/f01608.png', 'stimuli/f01625.png', 'stimuli/f01669.png', 'stimuli/f01681.png', 'stimuli/f01684.png', 'stimuli/f01702.png', 'stimuli/f01714.png', 'stimuli/f01755.png', 'stimuli/f01759.png', 'stimuli/f01764.png', 'stimuli/f01768.png', 'stimuli/f01794.png', 'stimuli/f01813.png', 'stimuli/f01818.png', 'stimuli/f01855.png', 'stimuli/f01860.png', 'stimuli/f01866.png', 'stimuli/f01926.png', 'stimuli/f01931.png', 'stimuli/f01961.png', 'stimuli/f01967.png', 'stimuli/f02010.png', 'stimuli/f02070.png', 'stimuli/f02095.png', 'stimuli/f02120.png', 'stimuli/f02125.png', 'stimuli/f02183.png', 'stimuli/f02311.png', 'stimuli/f02335.png', 'stimuli/f02502.png', 'stimuli/f02521.png', 'sequences/a19/a19_listA.csv', 'sequences/a19/a19_listB.csv', 'sequences/a19/a19_listC.csv', 'sequences/a19/a19_listD.csv', 'sequences/a19/a19_listE.csv', 'sequences/b02/b02_listA.csv', 'sequences/b02/b02_listB.csv', 'sequences/b02/b02_listC.csv', 'sequences/b02/b02_listD.csv', 'sequences/b02/b02_listE.csv', 'sequences/b11/b11_listA.csv', 'sequences/b11/b11_listB.csv', 'sequences/b11/b11_listC.csv', 'sequences/b11/b11_listD.csv', 'sequences/b11/b11_listE.csv', 'sequences/b10/b10_listA.csv', 'sequences/b10/b10_listB.csv', 'sequences/b10/b10_listC.csv', 'sequences/b10/b10_listD.csv', 'sequences/b10/b10_listE.csv', 'sequences/c10/c10_listA.csv', 'sequences/c10/c10_listB.csv', 'sequences/c10/c10_listC.csv', 'sequences/c10/c10_listD.csv', 'sequences/c10/c10_listE.csv', 'sequences/c13/c13_listA.csv', 'sequences/c13/c13_listB.csv', 'sequences/c13/c13_listC.csv', 'sequences/c13/c13_listD.csv', 'sequences/c13/c13_listE.csv', 'sequences/c28/c28_listA.csv', 'sequences/c28/c28_listB.csv', 'sequences/c28/c28_listC.csv', 'sequences/c28/c28_listD.csv', 'sequences/c28/c28_listE.csv', 'sequences/f12/f12_listA.csv', 'sequences/f12/f12_listB.csv', 'sequences/f12/f12_listC.csv', 'sequences/f12/f12_listD.csv', 'sequences/f12/f12_listE.csv', 'sequences/f15/f15_listA.csv', 'sequences/f15/f15_listB.csv', 'sequences/f15/f15_listC.csv', 'sequences/f15/f15_listD.csv', 'sequences/f15/f15_listE.csv', 'sequences/f17/f17_listA.csv', 'sequences/f17/f17_listB.csv', 'sequences/f17/f17_listC.csv', 'sequences/f17/f17_listD.csv', 'sequences/f17/f17_listE.csv', 'sequences/l02/l02_listA.csv', 'sequences/l02/l02_listB.csv', 'sequences/l02/l02_listC.csv', 'sequences/l02/l02_listD.csv', 'sequences/l02/l02_listE.csv', 'sequences/l12/l12_listA.csv', 'sequences/l12/l12_listB.csv', 'sequences/l12/l12_listC.csv', 'sequences/l12/l12_listD.csv', 'sequences/l12/l12_listE.csv', 'sequences/l23/l23_listA.csv', 'sequences/l23/l23_listB.csv', 'sequences/l23/l23_listC.csv', 'sequences/l23/l23_listD.csv', 'sequences/l23/l23_listE.csv', 'sequences/p13/p13_listA.csv', 'sequences/p13/p13_listB.csv', 'sequences/p13/p13_listC.csv', 'sequences/p13/p13_listD.csv', 'sequences/p13/p13_listE.csv', 'sequences/p20/p20_listA.csv', 'sequences/p20/p20_listB.csv', 'sequences/p20/p20_listC.csv', 'sequences/p20/p20_listD.csv', 'sequences/p20/p20_listE.csv', 'sequences/p35/p35_listA.csv', 'sequences/p35/p35_listB.csv', 'sequences/p35/p35_listC.csv', 'sequences/p35/p35_listD.csv', 'sequences/p35/p35_listE.csv', 'sequences/pl11/pl11_listA.csv', 'sequences/pl11/pl11_listB.csv', 'sequences/pl11/pl11_listC.csv', 'sequences/pl11/pl11_listD.csv', 'sequences/pl11/pl11_listE.csv', 'sequences/pl22/pl22_listA.csv', 'sequences/pl22/pl22_listB.csv', 'sequences/pl22/pl22_listC.csv', 'sequences/pl22/pl22_listD.csv', 'sequences/pl22/pl22_listE.csv', 'sequences/pl24/pl24_listA.csv', 'sequences/pl24/pl24_listB.csv', 'sequences/pl24/pl24_listC.csv', 'sequences/pl24/pl24_listD.csv', 'sequences/pl24/pl24_listE.csv', 'sequences/t17/t17_listA.csv', 'sequences/t17/t17_listB.csv', 'sequences/t17/t17_listC.csv', 'sequences/t17/t17_listD.csv', 'sequences/t17/t17_listE.csv', 'sequences/t20/t20_listA.csv', 'sequences/t20/t20_listB.csv', 'sequences/t20/t20_listC.csv', 'sequences/t20/t20_listD.csv', 'sequences/t20/t20_listE.csv', 'sequences/t24/t24_listA.csv', 'sequences/t24/t24_listB.csv', 'sequences/t24/t24_listC.csv', 'sequences/t24/t24_listD.csv', 'sequences/t24/t24_listE.csv', 'sequences/ty07/ty07_listA.csv', 'sequences/ty07/ty07_listB.csv', 'sequences/ty07/ty07_listC.csv', 'sequences/ty07/ty07_listD.csv', 'sequences/ty07/ty07_listE.csv', 'sequences/ty10/ty10_listA.csv', 'sequences/ty10/ty10_listB.csv', 'sequences/ty10/ty10_listC.csv', 'sequences/ty10/ty10_listD.csv', 'sequences/ty10/ty10_listE.csv', 'sequences/ty12/ty12_listA.csv', 'sequences/ty12/ty12_listB.csv', 'sequences/ty12/ty12_listC.csv', 'sequences/ty12/ty12_listD.csv', 'sequences/ty12/ty12_listE.csv', 'sequences/v03/v03_listA.csv', 'sequences/v03/v03_listB.csv', 'sequences/v03/v03_listC.csv', 'sequences/v03/v03_listD.csv', 'sequences/v03/v03_listE.csv', 'sequences/v04/v04_listA.csv', 'sequences/v04/v04_listB.csv', 'sequences/v04/v04_listC.csv', 'sequences/v04/v04_listD.csv', 'sequences/v04/v04_listE.csv', 'randomized_lists/stimlist01.csv', 'randomized_lists/stimlist02.csv', 'randomized_lists/stimlist03.csv', 'randomized_lists/stimlist04.csv', 'randomized_lists/stimlist05.csv', 'randomized_lists/stimlist06.csv', 'randomized_lists/stimlist07.csv', 'randomized_lists/stimlist08.csv', 'randomized_lists/stimlist09.csv', 'randomized_lists/stimlist10.csv', 'randomized_lists/stimlist11.csv', 'randomized_lists/stimlist12.csv', 'randomized_lists/stimlist13.csv', 'randomized_lists/stimlist14.csv', 'randomized_lists/stimlist15.csv', 'assets/images/16_Main_Test.jpg', 'assets/images/17_Main_Test.jpg', 'assets/sounds/Main_1.wav', 'assets/sounds/Main_2.wav', 'assets/sounds/Main_2_ALT.wav', 'assets/sounds/Main_3.wav', 'assets/sounds/Main_4.wav', 'assets/sounds/Main_5.wav', 'assets/sounds/Main_6.wav', 'assets/sounds/Main_7.wav', 'assets/sounds/Main_8_a.wav', 'assets/sounds/Main_8_b.wav', 'assets/sounds/Main_8_c.wav', 'assets/sounds/Main_8_d.wav', 'assets/sounds/Main_9.wav', 'assets/sounds/Main_10_a.wav', 'assets/sounds/Main_10_b.wav', 'assets/sounds/Main_10_c.wav', 'assets/sounds/Main_10_d.wav', 'assets/sounds/Main_11.wav', 'assets/sounds/Main_12.wav']
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hey!

        Press any key to continue!

        Placement trials 2
    KeyboardComponent welcome_response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train_written_response
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    ImageComponent bg_trial_written
      image = assets/images/18_Main_Test.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_whatconc
      Code Type = Both
      Begin Experiment:
        previousText = {}
      Begin JS Experiment:
        previousText = {};
      Begin JS Routine:
        // If the previous response wasn't 'y' or 'left', skip this routine
        if (!needTextInput) {
            continueRoutine = false;
        }

        defaultText = previousText[concept] || "";
      Begin Routine:
        # PYTHON
        # If the previous response wasn't 'y' or 'left', skip this routine
        if not needTextInput:
            continueRoutine = False

        # If we've seen this concept before, preload the previous text
        defaultText = previousText.get(concept, "")
      End JS Routine:
        previousText[concept] = textbox_response_training.text;
      End Routine:
        previousText[concept] = textbox_response_training.text
    SoundComponent sound_train_written
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_8_b.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
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    TextboxComponent textbox_response_training
      bold = False
      borderWidth = 0
      color = $(-1.0000, -1.0000, 0.0902)
      editable = True
      letterHeight = 0.05
      pos = (0, -0.12)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $defaultText
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    MouseComponent click_written_mouse
      clickable = btn_written_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent btn_written_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent written_button_placement
      Code Type = Both
      Begin Experiment:
        btn_written_img.pos = (0, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_written_img.pos = [0, -h/3];  // bottom-right third center
  Routine train_stimulus_presentation
    RoutineSettingsComponent train_stimulus_presentation
      desc = this is messed up presumably due to added outer loop
      stopVal [duration (s)] = $float(expInfo['stimPresTime'])
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    ImageComponent bg_trial_stimpres
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent stimulus_presentation_train
      image [set every repeat] = $feature_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent stop_training
      allowedKeys = 'q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_quit_train
      Code Type = Both
      Begin JS Routine:
        stop_training.keys = [];
      Each Frame:
        # press Q to stop the training loop
        if stop_training.keys:
            training_loop.finished = True
            continueRoutine = False
      Each JS Frame:
        // press Q to stop the training loop
        if (stop_training.keys.length > 0) {
            training_loop.finished = true;
            continueRoutine = false;
        }
  Routine start_main
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    TextComponent main_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = This is now the main task
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    KeyboardComponent main_instruction_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    RoutineSettingsComponent end
      stopVal [duration (s)] = 10
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    ImageComponent bg_goodbye_img
      image = assets/images/20_Main_Goodbye.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    SoundComponent sound_goodbye
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_11.wav
      startVal [time (s)] = 0.0
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  Routine start_screen
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    ImageComponent bg_start_img
      image = assets/images/1_Main_Start.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_start_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_start_mouse
      clickable = btn_start_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent old_feedback_script
      Code Type = Both
      disabled = True
      Before Experiment:
        showFeedback = False

        # az end routine part ment a feedback routine előőtti rutinba
      Before JS Experiment:
        var showFeedback = false;
      End JS Routine:
        // Default
        showFeedback = false;

        // Use your loop's actual name here:
        const loop = training_loop;

        // If this is the very last trial of the loop → show feedback
        if (loop.thisN === (loop.nTotal - 1)) {
          showFeedback = true;
        } else {
          // Try to read the next row's concept
          const nextRow = loop.trialList[loop.thisN + 1];

          if (nextRow && nextRow['concept'] !== undefined) {
            if (nextRow['concept'] !== concept) {
              showFeedback = true;
            }
          } else {
            // Safety: if next row isn't readable, treat as a boundary
            showFeedback = true;
          }
        }
      End Routine:
        # Default
        showFeedback = False

        loop = training_loop

        # If this is the last trial
        if loop.thisN == (loop.nTotal - 1):
            showFeedback = True
        else:
            nextRow = loop.trialList[loop.thisN + 1]
            if nextRow is not None and 'concept' in nextRow:
                if nextRow['concept'] != concept:
                    showFeedback = True
            else:
                showFeedback = True
  Routine welcome_screen
    RoutineSettingsComponent welcome_screen
      skipIf = expInfo['taskOrder'] == 2
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    ImageComponent bg_welcome_img
      image = assets/images/2_Main_Introduction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_welcome_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_welcome_mouse
      clickable = btn_welcome_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent welcome_screen_button_placement
      Code Type = Both
      Begin Experiment:
        w, h = win.size  # window width and height in pixels
        btn_welcome_img.pos = (w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        let w = psychoJS.window.size[0];  // window width in px
        let h = psychoJS.window.size[1];  // window height in px

        btn_welcome_img.pos = [w/3, -h/3];  // bottom-right third center
    SoundComponent sound_welcome
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_1.wav
      startVal [time (s)] = 0.0
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  Routine rules_start_screen
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    ImageComponent bg_rulesstart_img
      image = assets/images/5_Main_Instruction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rulesstart_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rulesstart_mouse
      clickable = btn_rulesstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rulesstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rulesstart_img.pos = (-w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rulesstart_img.pos = [-w/3, -h/3];  // bottom-right third center
    SoundComponent sound_rulesstart
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_4.wav
      startVal [time (s)] = 0.0
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  Routine rules_01_screen
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    ImageComponent bg_rules01_img
      image = assets/images/6_Main_Instruction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rules01_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rules01_mouse
      clickable = btn_rules01_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rules01_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rules01_img.pos = (-w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rules01_img.pos = [-w/3, -h/3];  // bottom-right third center
    SoundComponent sound_rules1
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_5.wav
      startVal [time (s)] = 0.0
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  Routine rules_02_screen
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    ImageComponent bg_rules02_img
      image = assets/images/7_Main_Instruction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rules02_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rules02_mouse
      clickable = btn_rules02_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rules02_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rules02_img.pos = (w/3, h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rules02_img.pos = [w/3, h/3];  // bottom-right third center
    SoundComponent sound_rules2
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_6.wav
      startVal [time (s)] = 0.0
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  Routine trial_start_screen
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    ImageComponent bg_trialstart_img
      image = assets/images/8_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_trialstart_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_trialstart_mouse
      clickable = btn_trialstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent trialstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_trialstart_img.pos = (3*(w/8), 0)  # bottom-right third center
      Begin JS Experiment:
        btn_trialstart_img.pos = [3*(w/8), 0];  // bottom-right third center
    SoundComponent sound_trialstart
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_7.wav
      startVal [time (s)] = 0.0
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  Routine main_start_screen
    RoutineSettingsComponent main_start_screen
      desc = i dont know why, but it might have been renamed and that causes some problems?
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    ImageComponent bg_mainstart_img
      image = assets/images/14_Main_Test.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_mainstart_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_mainstart_mouse
      clickable = btn_mainstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent mainstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_mainstart_img.pos = (-3*(w/8), 0)  # bottom-right third center
      Begin JS Experiment:
        btn_mainstart_img.pos = [-3*(w/8), 0];  // bottom-right third center
    SoundComponent sound_mainstart
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_9.wav
      startVal [time (s)] = 0.0
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  Routine train_yesno_response
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    CodeComponent training_yesno_bg_setting
      Code Type = Both
      Begin JS Routine:
        if (previousText[concept]) {
            bgImage = "assets/images/17_Main_Test.jpg";   // NOT empty
        } else {
            bgImage = "assets/images/16_Main_Test.jpg";   // empty
        }

        if (previousText[concept]) {
            soundYN = "assets/sounds/Main_8_c.wav";   // NOT empty
        } else {
            soundYN = "assets/sounds/Main_8_a.wav";   // empty
        }
      Begin Routine:
        if previousText[concept]:
            bgImage = "assets/images/17_Main_Test.jpg"   # NOT empty
        else:
            bgImage = "assets/images/16_Main_Test.jpg"   # empty

        if previousText[concept]:
            soundYN = "assets/sounds/Main_8_c.wav"   # NOT empty
        else:
            soundYN = "assets/sounds/Main_8_a.wav"   # empty
    ImageComponent bg_trial_yesno
      image [set every repeat] = $bgImage
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_yesno_yes_img
      image = assets/button_igen.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent btn_yesno_no_img
      image = assets/button_nem.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent sound_trial_yesno
      forceEndRoutine = False
      sound [set every repeat] = $soundYN
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3
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    KeyboardComponent trial_yesno_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent click_yesno_mouse
      clickable = btn_yesno_yes_img, btn_yesno_no_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent training_button_placement
      Code Type = Both
      Begin Experiment:
        btn_yesno_yes_img.pos = (w/6, -h/6)
        btn_yesno_no_img.pos = (-w/6, -h/6)
      Begin JS Experiment:
        btn_yesno_yes_img.pos = [w/6, -h/6];
        btn_yesno_no_img.pos = [-w/6, -h/6];
      End JS Routine:
        // Get the last key pressed (handles list vs single value)
        let _lastKey = null;
        if (trial_yesno_response.keys !== undefined && trial_yesno_response.keys !== null) {
            if (Array.isArray(trial_yesno_response.keys)) {
                _lastKey = trial_yesno_response.keys[trial_yesno_response.keys.length - 1];
            } else {
                _lastKey = trial_yesno_response.keys;
            }
        }

        // Detect button click
        let _yesButtonClicked = false;

        // Check mouse clicks every frame
        if (typeof click_yesno_mouse !== 'undefined') {
            if (click_yesno_mouse.clicked_name !== undefined && click_yesno_mouse.clicked_name !== null) {
                if (click_yesno_mouse.clicked_name.includes('btn_yesno_yes_img')) {
                    _yesButtonClicked = true;
                }
            }
        }

        // Final condition: Yes = keyboard OR button
        needTextInput = (
            _lastKey === 'y' ||
            _lastKey === 'right' ||
            _yesButtonClicked
        );
      End Routine:
        # Get the last key pressed (handles list vs single value)
        _lastKey = None
        if trial_yesno_response.keys is not None:
            _lastKey = trial_yesno_response.keys[-1] if isinstance(yesno_response_train.keys, list) else trial_yesno_response.keys

        # Detect button click (mouse)
        _yesButtonClicked = False
        if btn_yesno_yes_img.status == FINISHED:
            # If using a mouse component, check its.clicked_name
            if 'mouse' in locals():
                if hasattr(mouse, 'clicked_name') and mouse.clicked_name is not None:
                    _yesButtonClicked = ('btn_yesno_yes_img' in mouse.clicked_name)

        # Final condition: Yes = keyboard OR button
        needTextInput = ((_lastKey in ['y', 'right']) or _yesButtonClicked)
  Routine train_feedback
    RoutineSettingsComponent train_feedback
      stopVal [duration (s)] = 3
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    ImageComponent bg_feedback_train
      image = assets/images/13_Main_Practice_Reveal.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_feedback_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_feedback_mouse
      clickable = btn_feedback_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent feedback_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_feedback_img.pos = (0, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_feedback_img.pos = [0, -h/3];  // bottom-right third center
    TextComponent feedback_concept
      color = $(-1.0000, -1.0000, 0.0902)
      letterHeight = 0.1
      pos = (-0.3, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $concept
      units = norm
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    SoundComponent sound_training_feedback
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_8_d.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
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  Routine main_yesno_response
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    CodeComponent main_yesno_bg_setting
      Code Type = Both
      Begin JS Routine:
        if (previousText[concept]) {
            bgImage = "assets/images/17_Main_Test.jpg";   // NOT empty
        } else {
            bgImage = "assets/images/16_Main_Test.jpg";   // empty
        }

        if (previousText[concept]) {
            soundYN = "assets/sounds/Main_10_c.wav";   // NOT empty
        } else {
            soundYN = "assets/sounds/Main_10_a.wav";   // empty
        }
      Begin Routine:
        if previousText[concept]:
            bgImage = "assets/images/17_Main_Test.jpg"   # NOT empty
        else:
            bgImage = "assets/images/16_Main_Test.jpg"   # empty

        if previousText[concept]:
            soundYN = "assets/sounds/Main_10_c.wav"   # NOT empty
        else:
            soundYN = "assets/sounds/Main_10_a.wav"   # empty
    ImageComponent bg_main_yesno
      image [set every repeat] = $bgImage
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_yesno_yes_main
      image = assets/button_igen.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent btn_yesno_no_main
      image = assets/button_nem.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent main_yesno_key_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent main_yesno_mouse
      clickable = btn_yesno_yes_main, btn_yesno_no_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent main_yesno_button_placement
      Code Type = Both
      Begin Experiment:
        btn_yesno_yes_main.pos = (w/6, -h/6)
        btn_yesno_no_main.pos = (-w/6, -h/6)
      Begin JS Experiment:
        btn_yesno_yes_main.pos = [w/6, -h/6];
        btn_yesno_no_main.pos = [-w/6, -h/6];
      End JS Routine:
        // Get the last key pressed (handles list vs single value)
        let _lastKey = null;
        if (main_yesno_key_response.keys !== undefined && main_yesno_key_response.keys !== null) {
            if (Array.isArray(main_yesno_key_response.keys)) {
                _lastKey = main_yesno_key_response.keys[main_yesno_key_response.keys.length - 1];
            } else {
                _lastKey = main_yesno_key_response.keys;
            }
        }

        // Detect button click
        let _yesButtonClicked = false;

        // Check mouse clicks every frame
        if (typeof main_yesno_mouse !== 'undefined') {
            if (main_yesno_mouse.clicked_name !== undefined && main_yesno_mouse.clicked_name !== null) {
                if (main_yesno_mouse.clicked_name.includes('btn_yesno_yes_main')) {
                    _yesButtonClicked = true;
                }
            }
        }

        // Final condition: Yes = keyboard OR button
        needTextInput = (
            _lastKey === 'y' ||
            _lastKey === 'right' ||
            _yesButtonClicked
        );
      End Routine:
        # Get the last key pressed (handles list vs single value)
        _lastKey = None
        if main_yesno_key_response.keys is not None:
            _lastKey = main_yesno_key_response.keys[-1] if isinstance(main_yesno_key_response.keys, list) else main_yesno_key_response.keys

        # Detect button click (mouse)
        _yesButtonClicked = False
        if btn_yesno_yes_main.status == FINISHED:
            # If using a mouse component, check its.clicked_name
            if 'mouse' in locals():
                if hasattr(mouse, 'clicked_name') and mouse.clicked_name is not None:
                    _yesButtonClicked = ('btn_yesno_yes_main' in mouse.clicked_name)

        # Final condition: Yes = keyboard OR button
        needTextInput = ((_lastKey in ['y', 'right']) or _yesButtonClicked)
    SoundComponent sound_main_yesno
      forceEndRoutine = False
      sound [set every repeat] = $soundYN
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 4
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  Routine main_feedback
    RoutineSettingsComponent main_feedback
      stopVal [duration (s)] = 10
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    ImageComponent bg_feedback_main
      image = assets/images/19_Main_Test_Reveal.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_feedback_main
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent main_feedback_mouse
      clickable = btn_feedback_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent feedback_screen_button_placement_main
      Code Type = Both
      Begin Experiment:
        btn_feedback_main.pos = (0, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_feedback_main.pos = [0, -h/3];  // bottom-right third center
    TextComponent feedback_concept_main
      color = $(-1.0000, -1.0000, 0.0902)
      letterHeight = 0.1
      pos = (-0.3, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $concept
      units = norm
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    SoundComponent sound_main_feedback
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_10_d.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3
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  Routine main_stimulus_presentation
    RoutineSettingsComponent main_stimulus_presentation
      stopVal [duration (s)] = $float(expInfo['stimPresTime'])
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    ImageComponent bg_main_stimpres
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent stimulus_presentation_main
      image [set every repeat] = $feature_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine main_written_response
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    ImageComponent bg_main_written
      image = assets/images/18_Main_Test.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_whatconc_main
      Code Type = Both
      Begin JS Routine:
        // If the previous response wasn't 'y' or 'left', skip this routine
        if (!needTextInput) {
            continueRoutine = false;
        }

        defaultText = previousText[concept] || "";
      Begin Routine:
        # PYTHON
        # If the previous response wasn't 'y' or 'left', skip this routine
        if not needTextInput:
            continueRoutine = False

        # If we've seen this concept before, preload the previous text
        defaultText = previousText.get(concept, "")
      End JS Routine:
        previousText[concept] = textbox_response_main.text;
      End Routine:
        previousText[concept] = textbox_response_main.text
    TextboxComponent textbox_response_main
      bold = False
      borderWidth = 0
      color = $(-1.0000, -1.0000, 0.0902)
      editable = True
      letterHeight = 0.05
      pos = (0, -0.12)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $defaultText
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    MouseComponent main_written_mouse
      clickable = btn_written_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent btn_written_main
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent written_button_placement_main
      Code Type = Both
      Begin Experiment:
        btn_written_main.pos = (0, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_written_main.pos = [0, -h/3];  // bottom-right third center
    SoundComponent sound_main_written
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_10_b.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3
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  Routine csv_selector
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    CodeComponent pathway_construction_training
      Code Type = Both
      Begin Experiment:
        import os

        concPathTrain = os.path.join('sequences', 'a05', 'a05_listE.csv')

        expInfo['concPathTrain'] = concPathTrain
      Begin JS Experiment:
        // Define your variable
        concPathTrain = 'sequences/a05/a05_listE.csv';

        // Make it available globally (Builder-friendly)
        expInfo['concPathTrain'] = concPathTrain;
      Begin JS Routine:
        // Ensure strings and trim whitespace
        condDir  = String(conceptno).trim();  // e.g., "a05"
        listFile = String(version).trim();    // e.g., "E"

        // Build the filename: "a05_listE.csv"
        filename = `${condDir}_list${listFile}.csv`;

        // Join URL-style path parts for PsychoJS/Pavlovia (use forward slashes)
        concPathTrain = ["sequences", condDir, filename].join("/");

        // Log to console and save into the data file
        console.log(`concPathTrain = ${concPathTrain}`);
        expInfo['concPathTrain'] = concPathTrain;
      Begin Routine:
        condDir   = str(conceptno).strip()    # e.g., "conditions"
        listFile  = str(version).strip()   # e.g., "blockA.csv"

        filename = f"{condDir}_list{listFile}.csv"

        concPathTrain = os.path.join("sequences", condDir, filename)

        thisExp.addData('concPathTrain', concPathTrain)
  Routine csv_selector_main
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    CodeComponent pathway_construction_main
      Code Type = Both
      Begin Experiment:
        import os

        concPathMain = os.path.join('sequences', 'a05', 'a05_listE.csv')

        expInfo['concPathMain'] = concPathMain
      Begin JS Experiment:
        // Define your variable
        concPathMain = 'sequences/a05/a05_listE.csv';

        // Make it available globally (Builder-friendly)
        expInfo['concPathMain'] = concPathMain;
      Begin JS Routine:
        // Ensure strings and trim whitespace
        condDir  = String(conceptno).trim();  // e.g., "a05"
        listFile = String(version).trim();    // e.g., "E"

        // Build the filename: "a05_listE.csv"
        filename = `${condDir}_list${listFile}.csv`;

        // Join URL-style path parts for PsychoJS/Pavlovia (use forward slashes)
        concPathMain = ["sequences", condDir, filename].join("/");

        // Log to console and save into the data file
        console.log(`concPathMain = ${concPathMain}`);
        expInfo['concPathMain'] = concPathMain;
      Begin Routine:
        condDir   = str(conceptno).strip()    # e.g., "conditions"
        listFile  = str(version).strip()   # e.g., "blockA.csv"

        filename = f"{condDir}_list{listFile}.csv"

        concPathMain = os.path.join("sequences", condDir, filename)

        thisExp.addData('concPathMain', concPathMain)
  Routine library_check
    RoutineSettingsComponent library_check
      skipIf = expInfo['taskOrder'] == 2
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    ImageComponent bg_library1_img
      image = assets/images/3_Main_Introduction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_libfirst1_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_libfirst1_mouse
      clickable = btn_libfirst1_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent libfirst1_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_libfirst1_img.pos = (w/3, h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_libfirst1_img.pos = [w/3, h/3];  // bottom-right third center
    SoundComponent sound_library1
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_2.wav
      startVal [time (s)] = 0.0
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  Routine library_entry
    RoutineSettingsComponent library_entry
      skipIf = expInfo['taskOrder'] == 2
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    ImageComponent bg_library2_img
      image = assets/images/4_Main_Introduction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_libfirst2_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_libfirst2_mouse
      clickable = btn_libfirst2_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent libfirst2_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_libfirst2_img.pos = (w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_libfirst2_img.pos = [w/3, -h/3];  // bottom-right third center
    SoundComponent sound_library2
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_3.wav
      startVal [time (s)] = 0.0
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  Routine binoc_find
    RoutineSettingsComponent binoc_find
      skipIf = expInfo['taskOrder'] == 2
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    ImageComponent bg_binocfind_img
      image = assets/images/21_Main_ALT_LeadtoMIC.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_binocfind_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_binocfind_mouse
      clickable = btn_binocfind_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent binocfind_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_binocfind_img.pos = (w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_binocfind_img.pos = [w/3, -h/3];  // bottom-right third center
    SoundComponent sound_binoc_find
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_12.wav
      startVal [time (s)] = 0.0
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  Routine library_seen
    RoutineSettingsComponent library_seen
      skipIf = expInfo['taskOrder'] == 1
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    ImageComponent bg_library3_img
      image = assets/images/22_Main_ALT_Introduction.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_libsecond_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_libsecond_mouse
      clickable = btn_libsecond_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent libsecond_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_libsecond_img.pos = (w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_libsecond_img.pos = [w/3, -h/3];  // bottom-right third center
    SoundComponent sound_library3
      forceEndRoutine = False
      sound [set every repeat] = assets/sounds/Main_2_ALT.wav
      startVal [time (s)] = 0.0
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  Routine outer_csv_selector
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    CodeComponent outer_list_pathway_construction
      Code Type = Both
      Begin Experiment:
        listPath = f"conditions/cond{expInfo['listNum']}.csv"

        print("Loading:", listPath)

        expInfo['listPath'] = listPath
      Begin JS Experiment:
        listPath = `randomized_lists/stimlist${expInfo['listNum']}.csv`;

        console.log("Loading:", listPath);

        expInfo['listPath'] = listPath;
  Routine train_fixation
    RoutineSettingsComponent train_fixation
      stopVal [duration (s)] = $expInfo['fixDuration']
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    ImageComponent bg_trial_fix
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      lineWidth = 0.5
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent jitter
      Code Type = Both
      Begin Experiment:
        expInfo['fixDuration'] = 0.8 + random() * 0.4
      Begin JS Experiment:
        expInfo['fixDuration'] = 0.8 + Math.random() * 0.4;
      Begin JS Routine:
        // duration between 0.8 and 1.2 seconds
        expInfo['fixDuration'] = 0.8 + Math.random() * 0.4;
      Begin Routine:
        # duration between 0.8 and 1.2 seconds
        expInfo['fixDuration'] = 0.8 + random() * 0.4
  Routine train_mask
    RoutineSettingsComponent train_mask
      stopVal [duration (s)] = 1
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    ImageComponent bg_trial_mask
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine main_fixation
    RoutineSettingsComponent main_fixation
      stopVal [duration (s)] = $expInfo['fixDuration']
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    ImageComponent bg_main_fix
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent polygon_main
      fillColor = black
      lineColor = black
      lineWidth = 0.5
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent jitter_main
      Code Type = Both
      Begin Experiment:
        expInfo['fixDuration'] = 0.8 + random() * 0.4
      Begin JS Experiment:
        expInfo['fixDuration'] = 0.8 + Math.random() * 0.4;
      Begin JS Routine:
        // duration between 0.8 and 1.2 seconds
        expInfo['fixDuration'] = 0.8 + Math.random() * 0.4;
      Begin Routine:
        # duration between 0.8 and 1.2 seconds
        expInfo['fixDuration'] = 0.8 + random() * 0.4
  Routine main_mask
    RoutineSettingsComponent main_mask
      stopVal [duration (s)] = 1
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    ImageComponent bg_trial_mask_2
      image = assets/images/9_Main_Practice.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  Routine outer_csv_selector
  Routine start_screen
  Routine welcome_screen
  Routine library_check
  Routine library_entry
  Routine library_seen
  Routine rules_start_screen
  Routine rules_01_screen
  Routine rules_02_screen
  Routine trial_start_screen
  LoopInitiator train_outer_loop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = $listPath
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('concept_trial', np.int64(1)), ('version', 'E'), ('conceptno', 'f15'), ('concept', 'citrom')]),
      OrderedDict([('concept_trial', np.int64(2)), ('version', 'A'), ('conceptno', 'b10'), ('concept', 'kéz')]),
      OrderedDict([('concept_trial', np.int64(3)), ('version', 'C'), ('conceptno', 'pl24'), ('concept', 'bab')]),
      OrderedDict([('concept_trial', np.int64(4)), ('version', 'A'), ('conceptno', 'a05'), ('concept', 'kacsa')]),
      OrderedDict([('concept_trial', np.int64(5)), ('version', 'D'), ('conceptno', 'v13'), ('concept', 'autó')]),
      OrderedDict([('concept_trial', np.int64(6)), ('version', 'B'), ('conceptno', 'c13'), ('concept', 'cipő')]),
      OrderedDict([('concept_trial', np.int64(7)), ('version', 'E'), ('conceptno', 'l12'), ('concept', 'nappali')]),
      OrderedDict([('concept_trial', np.int64(8)), ('version', 'C'), ('conceptno', 'l23'), ('concept', 'erdő')]),
      OrderedDict([('concept_trial', np.int64(9)), ('version', 'B'), ('conceptno', 'f12'), ('concept', 'alma')]),
      OrderedDict([('concept_trial', np.int64(10)), ('version', 'D'), ('conceptno', 't17'), ('concept', 'asztal')])]
    Routine csv_selector
    LoopInitiator training_loop loopType="TrialHandler"
      conditionsFile = $concPathTrain
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus', 'stimuli/stim001.png'), ('concept', 'train_thing')]),
        OrderedDict([('stimulus', 'stimuli/stim002.png'), ('concept', 'train_thing')]),
        OrderedDict([('stimulus', 'stimuli/stim003.png'), ('concept', 'train_thing')]),
        OrderedDict([('stimulus', 'stimuli/stim001.png'), ('concept', 'Train')]),
        OrderedDict([('stimulus', 'stimuli/stim002.png'), ('concept', 'Train')]),
        OrderedDict([('stimulus', 'stimuli/stim003.png'), ('concept', 'Train')])]
      Routine train_fixation
      Routine train_mask
      Routine train_stimulus_presentation
      Routine train_yesno_response
      Routine train_written_response
    LoopTerminator training_loop
    Routine train_feedback
  LoopTerminator train_outer_loop
  Routine main_start_screen
  LoopInitiator main_outer_loop loopType="TrialHandler"
    Selected rows = 1:10
    conditionsFile = $listPath
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('concept_trial', np.int64(1)), ('version', 'E'), ('conceptno', 'f15'), ('concept', 'citrom')]),
      OrderedDict([('concept_trial', np.int64(2)), ('version', 'A'), ('conceptno', 'b10'), ('concept', 'kéz')]),
      OrderedDict([('concept_trial', np.int64(3)), ('version', 'C'), ('conceptno', 'pl24'), ('concept', 'bab')]),
      OrderedDict([('concept_trial', np.int64(4)), ('version', 'A'), ('conceptno', 'a05'), ('concept', 'kacsa')]),
      OrderedDict([('concept_trial', np.int64(5)), ('version', 'D'), ('conceptno', 'v13'), ('concept', 'autó')]),
      OrderedDict([('concept_trial', np.int64(6)), ('version', 'B'), ('conceptno', 'c13'), ('concept', 'cipő')]),
      OrderedDict([('concept_trial', np.int64(7)), ('version', 'E'), ('conceptno', 'l12'), ('concept', 'nappali')]),
      OrderedDict([('concept_trial', np.int64(8)), ('version', 'C'), ('conceptno', 'l23'), ('concept', 'erdő')]),
      OrderedDict([('concept_trial', np.int64(9)), ('version', 'B'), ('conceptno', 'f12'), ('concept', 'alma')]),
      OrderedDict([('concept_trial', np.int64(10)), ('version', 'D'), ('conceptno', 't17'), ('concept', 'asztal')])]
    Routine csv_selector_main
    LoopInitiator main_loop loopType="TrialHandler"
      conditionsFile = $concPathMain
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus', 'stimuli/stim004.png'), ('concept', 'AAA')]),
        OrderedDict([('stimulus', 'stimuli/stim005.png'), ('concept', 'AAA')]),
        OrderedDict([('stimulus', 'stimuli/stim006.png'), ('concept', 'AAA')]),
        OrderedDict([('stimulus', 'stimuli/stim004.png'), ('concept', 'BBB')]),
        OrderedDict([('stimulus', 'stimuli/stim005.png'), ('concept', 'BBB')]),
        OrderedDict([('stimulus', 'stimuli/stim006.png'), ('concept', 'BBB')])]
      Routine main_fixation
      Routine main_mask
      Routine main_stimulus_presentation
      Routine main_yesno_response
      Routine main_written_response
    LoopTerminator main_loop
    Routine main_feedback
  LoopTerminator main_outer_loop
  Routine end
  Routine binoc_find
